PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.1.4
  Window size (pixels) = [2560, 1440]
  color = $[1,1,1]
  expName = joplin1
  logging level = debug
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Routines
  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if not train_key.keys:
            feedback = "Oops...you failed to respond within the alloted time"
        elif train_key.corr:
            feedback = f"Correct. It was {category.upper()}"
        else:
            feedback = f"Incorrect. It was {category.upper()}"
    TextComponent feedback_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $feedback
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  Routine stimTest
    CodeComponent code_test
      Code Type = Auto->JS
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      Begin Routine:
        stim_test = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set1/' + str(stim_id.replace('\'', '')) + '.jpg'
    ImageComponent test_image
      image [set every repeat] = $stim_test
      interpolate = nearest
      pos = (-0.05, 0.1)
      size = [0.45,0.675]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    KeyboardComponent test_key
      allowedKeys = 'f','j'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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    TextComponent batmans_text_test
      color = black
      letterHeight = 0.08
      pos = [-0.35,-0.35]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      text = Batmans
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    TextComponent robins_text_test
      color = black
      letterHeight = 0.08
      pos = [0.35,-0.35]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      text = Robins
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  Routine stimTrain
    CodeComponent code_train
      Code Type = Auto->JS
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      Begin Routine:
        # rename the stim_id to match image names and file path
        train_stim = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set1/' + str(stim_id.replace('\'', '')) + '.jpg'
    ImageComponent train_image
      image [set every repeat] = $train_stim
      interpolate = nearest
      pos = (-0.05, 0.1)
      size = [0.45, 0.675]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent train_key
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $correct_key
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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    TextComponent batmans_text
      color = black
      letterHeight = 0.08
      pos = [-.35,-.35]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = Batmans
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    TextComponent robins_text
      color = black
      letterHeight = 0.08
      pos = [0.35,-0.35]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = Robins
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  Routine ITItest
  Routine fix1000
    PolygonComponent ITIstim
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine proto_select
  Routine recodeTrain
    CodeComponent recode_train_stim
      Code Type = Auto->JS
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      Begin Experiment:
        #use random prototype to build stimulus set
        sf.stim_build('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/dev_train.csv', random_proto)
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_stimfile.csv', filename + '_stimfile_train.csv')
  Routine recodeTest
    CodeComponent recode_test_stim
      Code Type = Auto->JS
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      Begin Routine:
        # recode the test stimuli in relation to randomly selected prototype
        sf.stim_build('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/test_stim1.csv', random_proto)
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_stimfile.csv', filename + '_stimfile_test.csv')
  Routine Welcome_Initializing_Screen
    CodeComponent proto_selection
      Code Type = Auto->JS
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      Begin Experiment:
        # # run randpro_select to randomly select prototype for the experiment
        import stim_file_script as sf
        random_proto = sf.randpro_select('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/Prototype.csv', None)
    TextComponent welcome_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Insert welcome text.

        Press SPACE to proceed
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine debrief_thankyou
    TextComponent end_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Add defbrief/thank you

        Press Space to continue
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent end_code
      Code Type = Auto->JS
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      End Experiment:
        # get rid of unecessary conditions file
        os.remove(filename + '_stimfile_train.csv')
        os.remove(filename + '_stimfile_test.csv')
Flow
  Routine Welcome_Initializing_Screen
  Routine recodeTrain
  LoopInitiator trials_train loopType="TrialHandler"
    conditionsFile = $filename + '_stimfile_train.csv'
    loopType = random
    nReps = 1
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    Routine stimTrain
    Routine feedback
    Routine fix1000
  LoopTerminator trials_train
  Routine recodeTest
  LoopInitiator trials_test loopType="TrialHandler"
    conditionsFile = $filename + '_stimfile_test.csv'
    loopType = random
    nReps = 1
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    Routine stimTest
    Routine fix1000
  LoopTerminator trials_test
  Routine debrief_thankyou
